---
API: 2.1
OpenSesame: 3.2.6
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Orientation_PSA2018
set subject_parity even
set subject_nr 0
set start EXP
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#0000ff"
set font_underline no
set font_size 18
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:/core/Research/OpenSci/PSA/2018/2017_submission_orientation_generalicity/EXPDATA"
set disable_garbage_collection yes
set description "Matching Tasks"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi yes
set background "#ffffff"

define notepad Check_This
	__note__
	The experimenter has to use Python 2.7 run this script.
	This script has to stay in the folder where "raw_data" was created. 
	Give participant ID based on his/her arrival sequence.
	Participants' data of sentence-picture verification are saved in "SP" folder.
	The LAB ID(SEED) will be decided after you select the language.
	If this experiment is conducted with the other task, answer the form about the study order.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script Disable_Mouse
	set description "Executes Python code"
	___run__
	my_mouse = mouse()
	my_mouse.show_cursor(show = False)
	__end__
	set _prepare ""

define sequence EXP
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Check_This always
	run LAB_SEED always
	run STUDY_order always
	run Language_Selection always
	run List_Selection always
	run Disable_Mouse always
	run Verification_Welcome always
	run Verification_Prac always
	run Verification_Start always
	run Verification_Exp always

define sketchpad First_Fixation
	set duration 1000
	set description "Displays Initial Fixation"
	set background white
	draw fixdot color="#000000" show_if=always style=default x=-432 y=0 z_index=0

define sketchpad First_Fixation_Prac
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#000000" show_if=always style=default x=-432 y=0 z_index=0

define sketchpad Introduction_C
	set duration keypress
	set description Instruction
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=always text=歡迎參與實驗 x=0 y=-284 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="這次研究有三個部分，首先是閱讀句子與判別圖片的作業。<br /><br />接著是在網頁上的臉孔知覺測驗。<br /><br />最後是判斷兩個圖片是否相同的作業。" x=-448 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text=請按空白鍵開始 x=0 y=192 z_index=0

define sketchpad Introduction_E
	set duration keypress
	set description Instruction
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=always text=Welcome x=0 y=-284 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="This study has multiple parts. First, you will read sentences and identify pictures. Later, you will identify pairs of pictures." x=-448 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press space bar to practice" x=0 y=192 z_index=0

define form_text_input LAB_SEED
	# widget 0 0 1 1 label text="[form_title]"
	set timeout infinite
	set spacing 10
	set rows "4;1"
	set only_render no
	set margins "50;50;50;50"
	set form_var LAB_SEED
	set form_title ""
	set form_question "PSA statement; Instruction for Experimenters..."
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label center=no text="[form_question]"
	widget 0 1 1 1 text_input focus=yes return_accepts=yes stub="Input your LAB SEED..." var="[form_var]"


define form_text_display Language_Selection
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Select your Langauge</span>"
	set form_text ""
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=English var=language1
	widget 0 2 1 1 button center=yes frame=yes text="Chinese(Taiwan)" var=language2


define inline_script List_Select_E
	set description "Executes Python code"
	___run__
	### Get the subject number
	nr = self.get('subject_nr')
	
	### Generate a random sequence based the prior seed
	import random
	### Defind seed by LAB
	SEED = self.get('LAB_SEED')
	
	seq = [0,4,8,12,16,20,24,28,32,36,40]
	random.seed(SEED)
	random.shuffle(seq)
	
	### Decide the simtilus list
	### Maximal number = 160
	if nr <=16:
		nr += seq[0]
	elif nr > 16 & nr <= 32:
		nr += seq[1]
	elif nr > 32 & nr <= 48:
		nr += seq[2]
	elif nr > 48 & nr <= 64:
		nr += seq[3]
	elif nr > 64 & nr <= 80:
		nr += seq[4]
	elif nr > 80 & nr <= 96:
		nr += seq[5]
	elif nr > 96 & nr <= 112:
		nr += seq[6]
	elif nr > 112 & nr <= 128:
		nr += seq[7]
	elif nr > 128 & nr <= 144:
		nr += seq[8]
	else:
		nr += seq[9]
	
	# Assign Pratice (plst) and Experimental List(lst)
	if (nr / 4) % 4 == 1:
		if nr % 4 == 0:
			lst = 'ENG_LIST1.csv'
			plst = 'ENG_Prac2.csv'
		elif nr % 4 == 1:
			lst = 'ENG_LIST2.csv'
			plst = 'ENG_Prac2.csv'
		elif nr % 4 == 2:
			lst = 'ENG_LIST3.csv'
			plst = 'ENG_Prac1.csv'
		else:
			lst = 'ENG_LIST4.csv'
			plst = 'ENG_Prac1.csv'
	elif (nr / 4) % 4 == 2:
		if nr % 4 == 1:
			lst = 'ENG_LIST1.csv'
			plst = 'ENG_Prac2.csv'
		elif nr % 4 == 2:
			lst = 'ENG_LIST2.csv'
			plst = 'ENG_Prac2.csv'
		elif nr % 4 == 3:
			lst = 'ENG_LIST3.csv'
			plst = 'ENG_Prac1.csv'
		else:
			lst = 'ENG_LIST4.csv'
			plst = 'ENG_Prac1.csv'
	elif (nr / 4) % 4 == 3:
		if nr % 4 == 2:
			lst = 'ENG_LIST1.csv'
			plst = 'ENG_Prac2.csv'
		elif nr % 4 == 3:
			lst = 'ENG_LIST2.csv'
			plst = 'ENG_Prac2.csv'
		elif nr % 4 == 0:
			lst = 'ENG_LIST3.csv'
			plst = 'ENG_Prac1.csv'
		else:
			lst = 'ENG_LIST4.csv'
			plst = 'ENG_Prac1.csv'
	else:
		if nr % 4 == 3:
			lst = 'ENG_LIST1.csv'
			plst = 'ENG_Prac2.csv'
		elif nr % 4 == 0:
			lst = 'ENG_LIST2.csv'
			plst = 'ENG_Prac2.csv'
		elif nr % 4 == 1:
			lst = 'ENG_LIST3.csv'
			plst = 'ENG_Prac1.csv'
		else:
			lst = 'ENG_LIST4.csv'
			plst = 'ENG_Prac1.csv'
	
	exp.set('List', lst)
	exp.set('PList',plst)
	__end__
	set _prepare ""

define inline_script List_Select_TC
	set description "Executes Python code"
	___run__
	### Get the subject number
	nr = self.get('subject_nr')
	
	### Generate a random sequence based the prior seed
	import random
	### Defind seed by LAB
	SEED = 1200
	
	seq = [0,4,8,12,16,20,24,28,32,36,40]
	random.seed(SEED)
	random.shuffle(seq)
	
	### Decide the simtilus list
	### Maximal number = 160
	if nr <=16:
		nr += seq[0]
	elif nr > 16 & nr <= 32:
		nr += seq[1]
	elif nr > 32 & nr <= 48:
		nr += seq[2]
	elif nr > 48 & nr <= 64:
		nr += seq[3]
	elif nr > 64 & nr <= 80:
		nr += seq[4]
	elif nr > 80 & nr <= 96:
		nr += seq[5]
	elif nr > 96 & nr <= 112:
		nr += seq[6]
	elif nr > 112 & nr <= 128:
		nr += seq[7]
	elif nr > 128 & nr <= 144:
		nr += seq[8]
	else:
		nr += seq[9]
	
	### Assign the list in one Latin Squane
	if (nr / 4) % 4 == 1:
		if nr % 4 == 0:
			lst = 'TC_List01.csv'
		elif nr % 4 == 1:
			lst = 'TC_List02.csv'
		elif nr % 4 == 2:
			lst = 'TC_List03.csv'
		else:
			lst = 'TC_List04.csv'
	elif (nr / 4) % 4 == 2:
		if nr % 4 == 1:
			lst = 'TC_List01.csv'
		elif nr % 4 == 2:
			lst = 'TC_List02.csv'
		elif nr % 4 == 3:
			lst = 'TC_List03.csv'
		else:
			lst = 'TC_List04.csv'
	elif (nr / 4) % 4 == 3:
		if nr % 4 == 2:
			lst = 'TC_List01.csv'
		elif nr % 4 == 3:
			lst = 'TC_List02.csv'
		elif nr % 4 == 0:
			lst = 'TC_List03.csv'
		else:
			lst = 'TC_List04.csv'
	else:
		if nr % 4 == 3:
			lst = 'TC_List01.csv'
		elif nr % 4 == 0:
			lst = 'TC_List02.csv'
		elif nr % 4 == 1:
			lst = 'TC_List03.csv'
		else:
			lst = 'TC_List04.csv'
	
	### Output [List] to the loop object
	exp.set('List', lst)
	exp.set('PList',plst)
	__end__
	set _prepare ""

define sequence List_Selection
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run List_Select_TC "[language2]='yes'"
	run List_Select_E "[language1]='yes'"

define loop Memory_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Task M
	run Memory_sequence

define sequence Memory_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Probe_import always
	run Probe_sti always
	run Probe_sti_response always
	run Probe_sti_correct "[correct]==1"
	run Probe_sti_wrong "[correct]==0"
	run Trial_logger always

define loop Prac
	set source_file "[PList]"
	set source table
	set repeat 100
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[correct_count]=6"
	setcycle 0 empty_column ""
	run Prac_seq

define inline_script Prac_Count
	set description "Executes Python code"
	___run__
	if var.correct == 1: 
		var.correct_count +=1
	else:
		var.correct_count = 0
		var.reset_loop = 1
	__end__
	set _prepare ""

define inline_script Prac_Reset
	set description "Executes Python code"
	set _run "var.reset_loop = 0"
	set _prepare ""

define sequence Prac_Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run First_Fixation_Prac always
	run Probe_Prac always
	run Probe_Prac_response always
	run Second_Fixation_Prac always
	run Target_Prac always
	run Target_response_Prac always
	run Target_response_correct_Prac "[correct]=1"
	run Target_response_wrong_Prac "[correct]=0"
	run Target_response_noans_Prac "[response_time] > 1499"
	run Prac_Count always

define loop Prac_loop
	set source_file "[PList]"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "Probe;Target;correct_response"
	set break_if_on_first yes
	set break_if "[reset_loop]=1"
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	setcycle 5 empty_column ""
	run Prac_Trial

define sequence Prac_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_Reset always
	run Prac_loop always

define inline_script Prac_setup
	set description "Executes Python code"
	___run__
	var.correct_count = 0
	var.reset_loop = 0
	__end__
	set _prepare ""

define sketchpad Probe
	set duration 0
	set description "Displays stimuli sentence"
	set background white
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language1]=yes" text="[Probe]" x=-432 y=0 z_index=0
	draw textline center=0 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if="[language2]=yes" text="[Probe]" x=-432 y=0 z_index=0

define inline_script Probe_Collect
	set description "Executes Python code"
	___run__
	### Enqueue the probes into list
	probe_list.append(self.get("Probe"))
	__end__
	set _prepare ""

define sketchpad Probe_Prac
	set duration 0
	set description "Displays stimuli sentence"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language1]=yes" text="[Probe]" x=-432 y=0 z_index=0
	draw textline center=0 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if="[language2]=yes" text="[Probe]" x=-432 y=0 z_index=0

define keyboard_response Probe_Prac_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define inline_script Probe_import
	set description "Executes Python code"
	set _run ""
	___prepare__
	### Randomly select the probe sentence from list
	import random
	### Choose from the past 16 trials; otherwise choose from the past 8 trials
	#if(self.get('count_Probe_Collect') < 8):
	#		idx = random.choice(range(len(probe_list)))
	#else:
	idx = random.choice(range(len(probe_list) - 6, len(probe_list)))
	
	### Export the probe sentence for recognition
	rectarget = probe_list[idx]
	var.set('rectarget', rectarget)
	### Set up correct_response
	if(idx > (self.get('count_Probe_Collect') - 3) ):
			var.set('correct_response', 'j')
	else:
			var.set('correct_response', 'f')
	__end__

define keyboard_response Probe_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sketchpad Probe_sti
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language1]=yes" text="Did you read this sentence in the latest 3 trials?" x=0 y=-100 z_index=0
	draw textline center=1 color="#55aaff" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language1]=yes" text="[rectarget]" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language1]=yes" text="F: NO             J: YES" x=0 y=100 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if="[language2]=yes" text="剛剛讀過的3個句子有沒有這一句？" x=0 y=-100 z_index=0
	draw textline center=1 color="#55aaff" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if="[language2]=yes" text="[rectarget]" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if="[language2]=yes" text="F：沒有             J：有" x=0 y=100 z_index=0

define sketchpad Probe_sti_correct
	set duration 1500
	set description "Correct Feedback"
	set background white
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="作答正確!" x=-6 y=-3 z_index=0

define keyboard_response Probe_sti_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "f;j"

define sketchpad Probe_sti_wrong
	set duration 1500
	set description "Error feedback"
	set background white
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Error!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="作答錯誤!" x=0 y=0 z_index=0

define form_multiple_choice STUDY_order
	set timeout infinite
	set spacing 10
	set rows "1;3;1"
	__question__
	If your lab will assigne this study as the first study to this participant, press "Yes". If this participant had finished the bundle study, press "No". If your lab run this study without follow PSA protocal, press "none of above" and explain the situation in the lab log.
	__end__
	__options__
	Yes
	No
	none of above
	__end__
	set margins "50;50;50;50"
	set form_var task_order
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sketchpad Second_Fixation
	set duration 500
	set description "Displays Second Fixation"
	set background white
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad Second_Fixation_Prac
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad Start_C
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=40 html=yes show_if=always text="請仔細閱讀每個句子<br /><br />實驗過程中隨機抽問能否記得剛讀過的句子<br /><br />若無問題，請按空白鍵開始正式實驗。" x=3 y=-100 z_index=0

define sketchpad Start_E
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Now that you have practiced, we will move on to the task." x=0 y=-200 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Read each sentence carefully. This time, we will test your memory during the task. Occasionally you will be asked if a specific sentence appeared during the last three trials.<br /><br />Remember:<br /><br />Press 'j' if the picture shows the object.<br />Press 'f' if the picture does not show the object." x=-450 y=-125 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press the space bar to begin" x=0 y=192 z_index=0

define sketchpad Target
	set duration 0
	set description "Displays target picture"
	set background white
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Target_Prac
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response Target_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "j;f"

define keyboard_response Target_response_Prac
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "j;f"

define sketchpad Target_response_correct
	set duration 500
	set description "Correct Feedback"
	set background white
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="作答正確!" x=-6 y=-3 z_index=0

define sketchpad Target_response_correct_Prac
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="作答正確!" x=-6 y=-3 z_index=0

define sketchpad Target_response_noans
	set duration 500
	set description "No Answer Feedback"
	set background white
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Too Slow" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text=按鍵太慢 x=0 y=0 z_index=0

define sketchpad Target_response_noans_Prac
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Too Slow" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text=按鍵太慢 x=0 y=0 z_index=0

define sketchpad Target_response_wrong
	set duration 500
	set description "Wrong Feedback"
	set background white
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Error!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="作答錯誤!" x=0 y=0 z_index=0

define sketchpad Target_response_wrong_Prac
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Error!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="作答錯誤!" x=0 y=0 z_index=0

define logger Trial_logger
	set description "Logs experimental data"
	set auto_log yes

define feedback Verification_Break
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	set background white
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if="[language1]=yes" text="Take a break" x=-8 y=-171 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if="[language1]=yes" text="Press space bar and continue" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text=休息一下 x=-8 y=-171 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text=按空白鍵繼續 x=0 y=0 z_index=0

define sketchpad Verification_End
	set duration keypress
	set description Instruction
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if="[language1]=yes" text="You have completed this part of the study.<br /><br />Please inform the researcher.<br />" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="第一段實驗結束<br /><br />請告知參與者啟動第二段實驗" x=0 y=0 z_index=0

define sequence Verification_Exp
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run presetup always
	run Verification_loop always

define sequence Verification_Prac
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_setup always
	run Prac always

define sequence Verification_Start
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Start_E "[language1]=\"yes\""
	run Start_C "[language2]=\"yes\""

define sequence Verification_Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run First_Fixation always
	run Probe always
	run Probe_Collect always
	run Probe_response always
	run Second_Fixation always
	run Target always
	run Target_response always
	run Target_response_correct "[correct]=1"
	run Target_response_wrong "[correct]=0"
	run Target_response_noans "[response_time]>1499"
	run Trial_logger always
	run Memory_loop "=self.get('count_Probe_Collect') in idx_list"
	run Verification_Break "=(self.get('count_Probe_Collect') % 24 == 23) and (self.get('count_Probe_Collect') < 47)"
	run Verification_End "=self.get('count_Probe_Collect') == 47"

define sequence Verification_Welcome
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Introduction_E "[language1]=\"yes\""
	run Welcome_E "[language1]=\"yes\""
	run Introduction_C "[language2]=\"yes\""
	run Welcome_C "[language2]=\"yes\""

define loop Verification_loop
	set source_file "[List]"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Orientation;Match;Probe;Target;correct_response;Task"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orientation ""
	setcycle 0 Match ""
	setcycle 0 Probe ""
	setcycle 0 Target ""
	setcycle 0 correct_response ""
	run Verification_Trial

define sketchpad Welcome_C
	set duration keypress
	set description Instruction
	draw textline center=1 color=black font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=句圖比對作業 x=0 y=-288 z_index=0
	draw textline center=0 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="每一題的的程序是先一個要閱讀的句子，再呈現要判斷的圖片。 <br /><br />你的任務是判斷圖片呈現的物件，是句子裡提到的物件。你可以<br />確實讀完句子，再按空白鍵讓電腦呈現圖片。<br /><br />如果圖片呈現的是句子提到的物件，請按'j'。<br />如果圖片呈現的不是句子提到的物件，請按'f'。<br /><br />判斷圖片是否符合有時間限制，請以最快且最正確的方式作答。<br /><br />" x=-448 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text=請確認沒有問題之後按空白鍵開始實驗 x=0 y=192 z_index=0

define sketchpad Welcome_E
	set duration keypress
	set description Instruction
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Sentence Picture Verification" x=0 y=-284 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="In this task, you will be reading sentences and identifying objects. For each trial, you will read a sentence that appears on the screen. When you press the space bar, a picture of an object will appear. Your task is to choose whether the picture shows an object that was mentioned in the preceding sentence.<br /><br />Press 'j' if the picture shows the object. <br />Press 'f' if the picture does not show the object.<br /><br />If you press the correct key, the word 'Correct' will appear. The word 'Error' will be appear if you press the incorrect key or wait too long to respond.  <br /><br />Try to be as fast and accurate as possible. You will practice the task before beginning." x=-448 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press space bar to practice" x=0 y=192 z_index=0

define inline_script presetup
	set description "Executes Python code"
	___run__
	### codes from http://stackoverflow.com/questions/27276135/python-random-system-time-seed
	import random
	from datetime import datetime
	random.seed(datetime.now())
	
	### Call empty list for comprehension task
	probe_list = []
	### Select the index of sentences for comprehension task
	a = range(-1,2)*10
	random.shuffle(a)
	idx_list = [sum(x) for x in zip(range(6,49,4), a)]
	### Save the index in the variable
	var.set('alt_task',idx_list)
	__end__
	set _prepare ""

