---
API: 2.1
OpenSesame: 3.2.6
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Orientation_PSA2018
set subject_parity even
set subject_nr 0
set start EXP
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set osf_id 5a7ce671e83246000deafe81
set osf_always_upload_experiment yes
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#0000ff"
set font_underline no
set font_size 18
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:/core/Research/OpenSci/PSA/2018/2017_submission_orientation_generalicity/Script"
set disable_garbage_collection yes
set description "Matching Tasks"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi yes
set background "#ffffff"

define notepad Check_This
	__note__
	The experimenter has to use Python 2.7 run this script.
	This script has to stay in the folder where "raw_data" was created. 
	Give participant ID based on his/her arrival sequence.
	Participants' data of picture-picture verification are saved in "PP" folder.
	The LAB ID(SEED) will be filled in after you select the language.
	Participants will fill in "gender" and "birth year, month" before the study starts.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script Disable_Mouse
	set description "Executes Python code"
	___run__
	my_mouse = mouse()
	my_mouse.show_cursor(show = False)
	__end__
	set _prepare ""

define sequence EXP
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Check_This always
	run LAB_SEED always
	run Language_Selection always
	run postdata_E "[language1]=\"yes\""
	run postdata_C "[language2]=\"yes\""
	run List_Selection always
	run Disable_Mouse always
	run Pictures_Welcome always
	run Pictures_Prac always
	run Pictures_Start always
	run Pictures_Exp always

define form_text_input LAB_SEED
	# widget 0 0 1 1 label text="[form_title]"
	set timeout infinite
	set spacing 10
	set rows "4;1"
	set only_render no
	set margins "50;50;50;50"
	set form_var LAB_SEED
	set form_question "Enter our LAB seed number."
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label center=no text="[form_question]"
	widget 0 1 1 1 text_input focus=yes return_accepts=yes stub="Input your LAB SEED..." var="[form_var]"


define form_text_display Language_Selection
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Select Instruction Langauge</span>"
	set form_text ""
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=English var=language1
	widget 0 2 1 1 button center=yes frame=yes text="Chinese(Taiwan)" var=language2


define inline_script List_Select
	set description "Executes Python code"
	___run__
	### Get the subject number
	nr = self.get('subject_nr')
	
	### Generate a random sequence based the prior seed
	import random
	### Defind seed by LAB
	SEED = self.get('LAB_SEED')
	
	seq = [0,4,8,12,16,20,24,28,32,36,40]
	random.seed(SEED)
	random.shuffle(seq)
	
	if nr <=16:
		nr += seq[0]
	elif nr > 16 & nr <= 32:
		nr += seq[1]
	elif nr > 32 & nr <= 48:
		nr += seq[2]
	elif nr > 48 & nr <= 64:
		nr += seq[3]
	elif nr > 64 & nr <= 80:
		nr += seq[4]
	elif nr > 80 & nr <= 96:
		nr += seq[5]
	elif nr > 96 & nr <= 112:
		nr += seq[6]
	elif nr > 112 & nr <= 128:
		nr += seq[7]
	elif nr > 128 & nr <= 144:
		nr += seq[8]
	else:
		nr += seq[9]
	
	# Assign Pratice (plst) and Experimental List(lst)
	if (nr / 4) % 4 == 1:
		if nr % 4 == 0:
			pplst = 'PP_LIST1.csv'
		elif nr % 4 == 1:
			pplst = 'PP_LIST2.csv'
		elif nr % 4 == 2:
			pplst = 'PP_LIST3.csv'
		else:
			pplst = 'PP_LIST4.csv'
	elif (nr / 4) % 4 == 2:
		if nr % 4 == 1:
			pplst = 'PP_LIST1.csv'
		elif nr % 4 == 2:
			pplst = 'PP_LIST2.csv'
		elif nr % 4 == 3:
			pplst = 'PP_LIST3.csv'
		else:
			pplst = 'PP_LIST4.csv'
	elif (nr / 4) % 4 == 3:
		if nr % 4 == 2:
			pplst = 'PP_LIST1.csv'
		elif nr % 4 == 3:
			pplst = 'PP_LIST2.csv'
		elif nr % 4 == 0:
			pplst = 'PP_LIST3.csv'
		else:
			pplst = 'PP_LIST4.csv'
	else:
		if nr % 4 == 3:
			pplst = 'PP_LIST1.csv'
		elif nr % 4 == 0:
			pplst = 'PP_LIST2.csv'
		elif nr % 4 == 1:
			pplst = 'PP_LIST3.csv'
		else:
			pplst = 'PP_LIST4.csv'
	
	exp.set('PPList',pplst)
	__end__
	set _prepare ""

define sequence List_Selection
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run List_Select always

define feedback Pictures_Break
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	set background white
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if="[language1]=yes" text="Take a break" x=-8 y=-171 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if="[language1]=yes" text="Press space bar and continue" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text=休息一下 x=-8 y=-171 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text=按空白鍵繼續 x=0 y=0 z_index=0

define sketchpad Pictures_End
	set duration keypress
	set description Instruction
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if="[language1]=yes" text="End of Study<br /><br />Thanks your participation.<br />" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="實驗結束。感謝您的參與。" x=0 y=0 z_index=0

define sequence Pictures_Exp
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Pictures_loop always

define sketchpad Pictures_Fixation
	set duration 500
	set description "Displays Second Fixation"
	set background white
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad Pictures_Fixation_Prac
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sequence Pictures_Prac
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_setup always
	run Prac always

define sequence Pictures_Start
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Start_E "[language1]=\"yes\""
	run Start_C "[language2]=\"yes\""

define sketchpad Pictures_Target
	set duration 0
	set description "Displays target picture"
	set background white
	draw image center=1 file="[Picture1]" scale=1 show_if=always x=-300 y=0 z_index=0
	draw image center=1 file="[Picture2]" scale=1 show_if=always x=300 y=0 z_index=0

define sequence Pictures_Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Pictures_Fixation always
	run Pictures_Target always
	run Pictures_response always
	run Pictures_response_correct "[correct]=1"
	run Pictures_response_wrong "[correct]=0"
	run Pictures_response_noans "[response_time]>1499"
	run Trial_logger always
	run Pictures_Break "=(self.get('count_Pictures_response') % 24 == 23) and (self.get('count_Pictures_response') < 47)"
	run Pictures_End "=self.get('count_Pictures_response') == 47"

define sequence Pictures_Welcome
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_PP_E "[language1]=\"yes\""
	run Welcome_PP_C "[language2]=\"yes\""

define loop Pictures_loop
	set source_file "[PPList]"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Orientation;Match;Probe;Target;correct_response;Task"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orientation ""
	setcycle 0 Match ""
	setcycle 0 Probe ""
	setcycle 0 Target ""
	setcycle 0 correct_response ""
	run Pictures_Trial

define keyboard_response Pictures_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "j;f"

define sketchpad Pictures_response_correct
	set duration 500
	set description "Correct Feedback"
	set background white
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="作答正確!" x=-6 y=-3 z_index=0

define sketchpad Pictures_response_noans
	set duration 500
	set description "No Answer Feedback"
	set background white
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Too Slow" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text=按鍵太慢 x=0 y=0 z_index=0

define sketchpad Pictures_response_wrong
	set duration 500
	set description "Wrong Feedback"
	set background white
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Error!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="作答錯誤!" x=0 y=0 z_index=0

define loop Prac
	set source_file "[PList]"
	set source table
	set repeat 100
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[correct_count]=6"
	setcycle 0 empty_column ""
	run Prac_seq

define inline_script Prac_Count_1
	set description "Executes Python code"
	___run__
	if var.correct == 1: 
		var.correct_count +=1
	else:
		var.correct_count = 0
		var.reset_loop = 1
	__end__
	set _prepare ""

define inline_script Prac_Reset
	set description "Executes Python code"
	set _run "var.reset_loop = 0"
	set _prepare ""

define sequence Prac_Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Pictures_Fixation_Prac always
	run Target_Prac always
	run Target_response_Prac always
	run Target_response_correct_Prac "[correct]=1"
	run Target_response_wrong_Prac_1 "[correct]=0"
	run Target_response_noans_Prac_1 "[response_time] > 1499"
	run Prac_Count_1 always

define loop Prac_loop
	set source_file "[PList]"
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "Probe;Target;correct_response"
	set break_if_on_first yes
	set break_if "[reset_loop]=1"
	setcycle 0 Picture1 "ant.jpg"
	setcycle 0 Picture2 "ant.jpg"
	setcycle 0 correct_response j
	setcycle 1 Picture1 "anchor.jpg"
	setcycle 1 Picture2 "accord.jpg"
	setcycle 1 correct_response f
	setcycle 2 Picture1 "bike.jpg"
	setcycle 2 Picture2 "bike.jpg"
	setcycle 2 correct_response j
	setcycle 3 Picture1 "blouse.jpg"
	setcycle 3 Picture2 "cap.jpg"
	setcycle 3 correct_response f
	setcycle 4 Picture1 "glases.jpg"
	setcycle 4 Picture2 "glases.jpg"
	setcycle 4 correct_response j
	setcycle 5 Picture1 "leaf.jpg"
	setcycle 5 Picture2 "leg.jpg"
	setcycle 5 correct_response f
	run Prac_Trial

define sequence Prac_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_Reset always
	run Prac_loop always

define inline_script Prac_setup
	set description "Executes Python code"
	___run__
	var.correct_count = 0
	var.reset_loop = 0
	__end__
	set _prepare ""

define sketchpad Start_C
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=40 html=yes show_if=always text="若無問題，請按空白鍵開始正式實驗。" x=3 y=-100 z_index=0

define sketchpad Start_E
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Now that you have practiced, we will move on to the task." x=0 y=-200 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Remember:<br /><br />Press 'j' if the pictures are the same.<br />Press 'f' if the pictures are different." x=-450 y=-125 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press the space bar to begin" x=0 y=100 z_index=0

define sketchpad Target_Prac
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Picture1]" scale=1 show_if=always x=-300 y=0 z_index=0
	draw image center=1 file="[Picture2]" scale=1 show_if=always x=300 y=0 z_index=0

define keyboard_response Target_response_Prac
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "j;f"

define sketchpad Target_response_correct_Prac
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="作答正確!" x=-6 y=-3 z_index=0

define sketchpad Target_response_noans_Prac_1
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Too Slow" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text=按鍵太慢 x=0 y=0 z_index=0

define sketchpad Target_response_wrong_Prac_1
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="Error!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="作答錯誤!" x=0 y=0 z_index=0

define logger Trial_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad Welcome_PP_C
	set duration keypress
	set description Instruction
	draw textline center=1 color=black font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=圖片比對作業 x=0 y=-288 z_index=0
	draw textline center=0 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="這個作業你會看到兩張圖片。 <br /><br />請你判斷這兩張圖片裡的物件是不是一樣的。<br /><br />如果是一樣的物件，請按'j'。<br />如果是不一樣的物件，請按'f'。<br /><br />判斷時間有限制，請以最快且最正確的方式作答。<br /><br />" x=-448 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text=請確認沒有問題之後按空白鍵開始實驗 x=0 y=192 z_index=0

define sketchpad Welcome_PP_E
	set duration keypress
	set description Instruction
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Picture - Picture Verification" x=0 y=-284 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="This task is the last part of the study. <br /><br />You will see two pictures on the screen. Your job is to verify if the pictures show the same object.<br /><br />Press 'j' if they are the same.<br />Press 'f' if they are different.<br /><br />If you press the correct key, the word 'Correct' will appear. The word 'Error' will be appear if you press the incorrect key or wait too long to respond.<br /><br />Try to be as fast and accurate as possible. You will practice the task before beginning." x=-448 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press space bar to practice" x=0 y=192 z_index=0

define inline_script postdata_C
	set description "For English participants"
	___run__
	def my_form_validator():
	
		"""Checks whether both the gender and age fields have been filled out"""
	
		return var.gender != u'no' and var.year != u'' and var.month != u''
	
	
	def filter_digits(ch):
	
		"""Allows only digit characters as input"""
	
		return ch in u'0123456789'
	
	
	# Define all widgets
	button_ok = Button(text=u'填寫完畢')
	label_gender= Label(u'您的性別是:')
	checkbox_male = Checkbox(text=u'男性', group=u'gender', var=u'gender')
	checkbox_female = Checkbox(text=u'女性', group=u'gender', var=u'gender')
	checkbox_none = Checkbox(text=u'不在一般分類', group=u'gender', var=u'gender')
	checkbox_na = Checkbox(text=u'無可奉告', group=u'gender', var=u'gender')
	label_year = Label(u'您的出生西元年份(例如, 1999)')
	label_month = Label(u'您的出生月份(例如., 02)')
	# Specify a key filter so that only digits are accepted as text input
	input_year = TextInput(stub=u'請輸入四位數字', var=u'year', key_filter=filter_digits)
	input_month = TextInput(stub=u'請輸入二位數字', var=u'month', key_filter=filter_digits)
	# Build the form. Specify a validator function to make sure that the form is
	# completed.
	my_form = Form(validator=my_form_validator, rows=[1,1,1,1,1], cols=[1,1,1])
	my_form.set_widget(label_gender, (0, 0))
	my_form.set_widget(checkbox_male, (1, 0))
	my_form.set_widget(checkbox_female, (2, 0))
	my_form.set_widget(checkbox_none, (1, 1))
	my_form.set_widget(checkbox_na, (2, 1))
	my_form.set_widget(label_year, (0, 2))
	my_form.set_widget(input_year, (1, 2), colspan=2)
	my_form.set_widget(label_month, (0, 3))
	my_form.set_widget(input_month, (1, 3), colspan=2)
	my_form.set_widget(button_ok, (1, 4))
	my_form._exec()
	__end__
	set _prepare ""

define inline_script postdata_E
	set description "For English participants"
	___run__
	def my_form_validator():
	
		"""Checks whether both the gender and age fields have been filled out"""
	
		return var.gender != u'no' and var.year != u'' and var.month != u''
	
	
	def filter_digits(ch):
	
		"""Allows only digit characters as input"""
	
		return ch in u'0123456789'
	
	
	
	# Define all widgets
	button_ok = Button(text=u'Ok')
	label_gender= Label(u'Your gender')
	checkbox_male = Checkbox(text=u'Male', group=u'gender', var=u'gender')
	checkbox_female = Checkbox(text=u'Female', group=u'gender', var=u'gender')
	checkbox_none = Checkbox(text=u'Not to be identified', group=u'gender', var=u'gender')
	checkbox_na = Checkbox(text=u'No will to say', group=u'gender', var=u'gender')
	label_year = Label(u'Your birth year(e.g., 1999)')
	label_month = Label(u'Your birth month(e.g., 02)')
	# Specify a key filter so that only digits are accepted as text input
	input_year = TextInput(stub=u'Input four digits', var=u'year', key_filter=filter_digits)
	input_month = TextInput(stub=u'Input two digits', var=u'month', key_filter=filter_digits)
	# Build the form. Specify a validator function to make sure that the form is
	# completed.
	my_form = Form(validator=my_form_validator, cols=[1,1,1], rows=[1,1,1,1,1])
	my_form.set_widget(label_gender, (0, 0))
	my_form.set_widget(checkbox_male, (1, 0))
	my_form.set_widget(checkbox_female, (2, 0))
	my_form.set_widget(checkbox_none, (1, 1))
	my_form.set_widget(checkbox_na, (2, 1))
	my_form.set_widget(label_year, (0, 2))
	my_form.set_widget(input_year, (1, 2), colspan=2)
	my_form.set_widget(label_month, (0, 3))
	my_form.set_widget(input_month, (1, 3), colspan=2)
	my_form.set_widget(button_ok, (1, 4))
	my_form._exec()
	__end__
	set _prepare ""

